PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = diagram
  keyboardBackend = ioHub
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Routines
  Routine blabla
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    TextComponent blaBlaInst
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $eee
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    KeyboardComponent KoniecInst
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine koniec
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    TextComponent TekstKoncowy
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Dzięki wykonanie za eksperymentu ^^
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    KeyboardComponent KlawiszKoniec
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ksztalt
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    PolygonComponent CentrumTestK
      fillColor = 0.7000, 0.7000, 0.7000
      shape = rectangle
      size [set every repeat] = Centrum, Centrum
      startVal [time (s)] = 1
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    PolygonComponent BokTestK
      fillColor = 0.7000, 0.7000, 0.7000
      pos [set every repeat] = xtrona, 0
      shape = rectangle
      size [set every repeat] = Bok, Bok
      startVal [time (s)] = 2
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    KeyboardComponent KlawiszOdpK
      allowedKeys = 'down','up'
      forceEndRoutine = True
      startVal [time (s)] = 2
      storeCorrect = True
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    TextComponent CentrumTargetK
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    PolygonComponent BokTargetK
      fillColor = white
      pos [set every repeat] = (xtrona, 0)
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine licztera
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    TextComponent BokTarget
      letterHeight = 0.05
      pos [set every repeat] = xtrona,0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = +
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    TextComponent CentrumTarget
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    TextComponent CentrumTest
      letterHeight = 0.05
      startVal [time (s)] = 1
      text [set every repeat] = $Centrum
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    TextComponent BokTest
      letterHeight = 0.05
      pos [set every repeat] = xtrona,0
      startVal [time (s)] = 2
      text [set every repeat] = $Bok
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    KeyboardComponent KlawiszOdp
      allowedKeys = 'w','s','up','down'
      correctAns = $poprawna
      forceEndRoutine = True
      startVal [time (s)] = 2
      storeCorrect = True
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Flow
  LoopInitiator t0 loopType="TrialHandler"
    Selected rows = 0
    conditionsFile = TestNaX/Teksty.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'uuu': 0, 'eee': 'Ocenianie wielkości liczb\n\nPorównaj liczbę na boku z liczbą na środku. Jeśli liczba boczna jest większa naciśnij strzałkę do góry, jeśli jest mniesza naciśnij strzałkę w dół'},
      {'uuu': 1, 'eee': 'Ocenianie kolejności w alfabecie\n\nPorównaj miejsce litery na boku z literą na środku. Jeśli litera na boku jest bliżej początku alfabetu naciśnij strzałkę w górę, jeśli jest bliżej końca naciśnij strzałkę w dół'},
      {'uuu': 2, 'eee': 'Ocenianie wielkości wielkości figur\n\nPorównaj figurę na boku z figurą na środku. Jeśli figura boczna jest większa naciśnij strzałkę do góry, jeśli jest mniejsza naciśnij strzałkę w dół'},
      {'uuu': 3, 'eee': 'Znowu liczby :) '},
      {'uuu': 4, 'eee': 'Znowu litery :)'}]
    Routine blabla
  LoopTerminator t0
  LoopInitiator TNA loopType="TrialHandler"
    Selected rows = 3,4
    conditionsFile = TestNaX/TestNaA.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'uuu': 0, 'Centrum': 3, 'Bok': 4, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 1},
      {'uuu': 1, 'Centrum': 3, 'Bok': 5, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 1},
      {'uuu': 2, 'Centrum': 3, 'Bok': 6, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 1},
      {'uuu': 3, 'Centrum': 3, 'Bok': 7, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 1},
      {'uuu': 4, 'Centrum': 3, 'Bok': 8, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 1},
      {'uuu': 5, 'Centrum': 3, 'Bok': 9, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 1},
      {'uuu': 6, 'Centrum': 3, 'Bok': 10, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 1},
      {'uuu': 7, 'Centrum': 3, 'Bok': 11, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 1},
      {'uuu': 8, 'Centrum': 3, 'Bok': 12, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 1},
      {'uuu': 9, 'Centrum': 3, 'Bok': 13, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 1},
      {'uuu': 10, 'Centrum': 3, 'Bok': 14, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 1},
      {'uuu': 11, 'Centrum': 3, 'Bok': 15, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 1},
      {'uuu': 12, 'Centrum': 3, 'Bok': 16, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 1},
      {'uuu': 13, 'Centrum': 3, 'Bok': 17, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 1},
      {'uuu': 14, 'Centrum': 3, 'Bok': 18, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 1},
      {'uuu': 15, 'Centrum': 3, 'Bok': 19, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 1},
      {'uuu': 16, 'Centrum': 3, 'Bok': 20, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 1},
      {'uuu': 17, 'Centrum': 3, 'Bok': 21, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 1}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
    Routine licztera
  LoopTerminator TNA
  LoopInitiator t2 loopType="TrialHandler"
    Selected rows = 2
    conditionsFile = TestNaX/Teksty.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'uuu': 0, 'eee': 'Ocenianie wielkości liczb\n\nPorównaj liczbę na boku z liczbą na środku. Jeśli liczba boczna jest większa naciśnij strzałkę do góry, jeśli jest mniesza naciśnij strzałkę w dół'},
      {'uuu': 1, 'eee': 'Ocenianie kolejności w alfabecie\n\nPorównaj miejsce litery na boku z literą na środku. Jeśli litera na boku jest bliżej początku alfabetu naciśnij strzałkę w górę, jeśli jest bliżej końca naciśnij strzałkę w dół'},
      {'uuu': 2, 'eee': 'Ocenianie wielkości wielkości figur\n\nPorównaj figurę na boku z figurą na środku. Jeśli figura boczna jest większa naciśnij strzałkę do góry, jeśli jest mniejsza naciśnij strzałkę w dół'},
      {'uuu': 3, 'eee': 'Znowu liczby :) '},
      {'uuu': 4, 'eee': 'Znowu litery :)'}]
    Routine blabla
  LoopTerminator t2
  LoopInitiator TNK loopType="TrialHandler"
    Selected rows = 1,87
    conditionsFile = TestNaX/TestNaKwadraty.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'uuu': 0, 'Centrum': 0.206, 'Bok': 0.309, 'xtrona': -0.253, 'poprawna': "up'", 'grupa': 5, 'ztrona': -0.4},
      {'uuu': 1, 'Centrum': 0.206, 'Bok': 0.412, 'xtrona': -0.253, 'poprawna': "up'", 'grupa': 5, 'ztrona': -0.4},
      {'uuu': 2, 'Centrum': 0.206, 'Bok': 0.515, 'xtrona': -0.253, 'poprawna': "up'", 'grupa': 5, 'ztrona': -0.4},
      {'uuu': 3, 'Centrum': 0.206, 'Bok': 0.618, 'xtrona': -0.253, 'poprawna': "up'", 'grupa': 5, 'ztrona': -0.4},
      {'uuu': 4, 'Centrum': 0.206, 'Bok': 0.721, 'xtrona': -0.253, 'poprawna': "up'", 'grupa': 5, 'ztrona': -0.4},
      {'uuu': 5, 'Centrum': 0.206, 'Bok': 0.824, 'xtrona': -0.253, 'poprawna': "up'", 'grupa': 5, 'ztrona': -0.4},
      {'uuu': 6, 'Centrum': 0.206, 'Bok': 0.927, 'xtrona': -0.253, 'poprawna': "up'", 'grupa': 5, 'ztrona': -0.4},
      {'uuu': 7, 'Centrum': 0.206, 'Bok': 1.03, 'xtrona': -0.253, 'poprawna': "up'", 'grupa': 5, 'ztrona': -0.4},
      {'uuu': 8, 'Centrum': 0.206, 'Bok': 1.132, 'xtrona': -0.253, 'poprawna': "up'", 'grupa': 5, 'ztrona': -0.4},
      {'uuu': 9, 'Centrum': 0.206, 'Bok': 1.235, 'xtrona': -0.253, 'poprawna': "up'", 'grupa': 5, 'ztrona': -0.4},
      {'uuu': 10, 'Centrum': 0.206, 'Bok': 0.103, 'xtrona': -0.253, 'poprawna': "down'", 'grupa': 5, 'ztrona': -0.4},
      {'uuu': 11, 'Centrum': 0.515, 'Bok': 0.618, 'xtrona': -0.253, 'poprawna': "up'", 'grupa': 5, 'ztrona': -0.4},
      {'uuu': 12, 'Centrum': 0.515, 'Bok': 0.721, 'xtrona': -0.253, 'poprawna': "up'", 'grupa': 5, 'ztrona': -0.4}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
    Routine ksztalt
  LoopTerminator TNK
  LoopInitiator t3a loopType="TrialHandler"
    Selected rows = 3
    conditionsFile = TestNaX/Teksty.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine blabla
  LoopTerminator t3a
  LoopInitiator TNB loopType="TrialHandler"
    Selected rows = 3,4
    conditionsFile = TestNaX/TestNaB.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'uuu': 0, 'Centrum': 12, 'Bok': 13, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 2},
      {'uuu': 1, 'Centrum': 12, 'Bok': 14, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 2},
      {'uuu': 2, 'Centrum': 12, 'Bok': 15, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 2},
      {'uuu': 3, 'Centrum': 12, 'Bok': 16, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 2},
      {'uuu': 4, 'Centrum': 12, 'Bok': 17, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 2},
      {'uuu': 5, 'Centrum': 12, 'Bok': 18, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 2},
      {'uuu': 6, 'Centrum': 12, 'Bok': 19, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 2},
      {'uuu': 7, 'Centrum': 12, 'Bok': 20, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 2},
      {'uuu': 8, 'Centrum': 12, 'Bok': 21, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 2},
      {'uuu': 9, 'Centrum': 12, 'Bok': 22, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 2},
      {'uuu': 10, 'Centrum': 12, 'Bok': 23, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 2},
      {'uuu': 11, 'Centrum': 12, 'Bok': 24, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 2},
      {'uuu': 12, 'Centrum': 12, 'Bok': 25, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 2},
      {'uuu': 13, 'Centrum': 12, 'Bok': 1, 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 2},
      {'uuu': 14, 'Centrum': 12, 'Bok': 2, 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 2},
      {'uuu': 15, 'Centrum': 12, 'Bok': 3, 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 2},
      {'uuu': 16, 'Centrum': 12, 'Bok': 4, 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 2}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
    Routine licztera
  LoopTerminator TNB
  LoopInitiator t4a loopType="TrialHandler"
    Selected rows = 1
    conditionsFile = TestNaX/Teksty.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine blabla
  LoopTerminator t4a
  LoopInitiator TNLA loopType="TrialHandler"
    Selected rows = 3,4
    conditionsFile = TestNaX/TestNaLiteryA.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'uuu': 0, 'Centrum': 'L', 'Bok': 'M', 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 4},
      {'uuu': 1, 'Centrum': 'L', 'Bok': 'N', 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 4},
      {'uuu': 2, 'Centrum': 'L', 'Bok': 'O', 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 4},
      {'uuu': 3, 'Centrum': 'L', 'Bok': 'P', 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 4},
      {'uuu': 4, 'Centrum': 'L', 'Bok': 'R', 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 4},
      {'uuu': 5, 'Centrum': 'L', 'Bok': 'S', 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 4},
      {'uuu': 6, 'Centrum': 'L', 'Bok': 'T', 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 4},
      {'uuu': 7, 'Centrum': 'L', 'Bok': 'U', 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 4},
      {'uuu': 8, 'Centrum': 'L', 'Bok': 'W', 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 4},
      {'uuu': 9, 'Centrum': 'L', 'Bok': 'Y', 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 4},
      {'uuu': 10, 'Centrum': 'L', 'Bok': 'Z', 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 4},
      {'uuu': 11, 'Centrum': 'L', 'Bok': 'A', 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 4},
      {'uuu': 12, 'Centrum': 'L', 'Bok': 'B', 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 4},
      {'uuu': 13, 'Centrum': 'L', 'Bok': 'C', 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 4},
      {'uuu': 14, 'Centrum': 'L', 'Bok': 'D', 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 4},
      {'uuu': 15, 'Centrum': 'L', 'Bok': 'E', 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 4},
      {'uuu': 16, 'Centrum': 'L', 'Bok': 'F', 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 4}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
    Routine licztera
  LoopTerminator TNLA
  LoopInitiator t3c loopType="TrialHandler"
    Selected rows = 3
    conditionsFile = TestNaX/Teksty.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine blabla
  LoopTerminator t3c
  LoopInitiator TNC loopType="TrialHandler"
    Selected rows = 3,4
    conditionsFile = TestNaX/TestNaC.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'uuu': 0, 'Centrum': 1, 'Bok': 2, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 3},
      {'uuu': 1, 'Centrum': 1, 'Bok': 3, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 3},
      {'uuu': 2, 'Centrum': 1, 'Bok': 4, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 3},
      {'uuu': 3, 'Centrum': 1, 'Bok': 5, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 3},
      {'uuu': 4, 'Centrum': 1, 'Bok': 6, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 3},
      {'uuu': 5, 'Centrum': 1, 'Bok': 7, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 3},
      {'uuu': 6, 'Centrum': 1, 'Bok': 8, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 3},
      {'uuu': 7, 'Centrum': 1, 'Bok': 9, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 3},
      {'uuu': 8, 'Centrum': 1, 'Bok': 10, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 3},
      {'uuu': 9, 'Centrum': 1, 'Bok': 11, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 3},
      {'uuu': 10, 'Centrum': 1, 'Bok': 12, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 3},
      {'uuu': 11, 'Centrum': 1, 'Bok': 13, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 3},
      {'uuu': 12, 'Centrum': 1, 'Bok': 14, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 3},
      {'uuu': 13, 'Centrum': 1, 'Bok': 15, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 3},
      {'uuu': 14, 'Centrum': 1, 'Bok': 16, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 3},
      {'uuu': 15, 'Centrum': 1, 'Bok': 17, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 3},
      {'uuu': 16, 'Centrum': 1, 'Bok': 18, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 3},
      {'uuu': 17, 'Centrum': 1, 'Bok': 19, 'xtrona': -0.4, 'poprawna': "up'", 'grupa': 3}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
    Routine licztera
  LoopTerminator TNC
  LoopInitiator t4b loopType="TrialHandler"
    Selected rows = 4
    conditionsFile = TestNaX/Teksty.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'uuu': 0, 'eee': 'Ocenianie wielkości liczb\n\nPorównaj liczbę na boku z liczbą na środku. Jeśli liczba boczna jest większa naciśnij strzałkę do góry, jeśli jest mniesza naciśnij strzałkę w dół.'},
      {'uuu': 1, 'eee': "'Ocenianie kolejności w alfabecie\n\nPorównaj miejsce litery na boku z literą na środku. Jeśli litera na boku jest bliżej początku alfabetu nacisnij strzałkę w dół, jeśli jesbliżej końca naciśnij strzałkę w górę."},
      {'uuu': 2, 'eee': 'Ocenianie wielkości wielkości figur\n\nPorównaj figurę na boku z figurą na środku. Jeśli figura boczna jest większa naciśnij strzałkę do góry, jeśli jest mniejsza naciśnij strzałkę w dół.'},
      {'uuu': 3, 'eee': 'Znowu liczby :) '},
      {'uuu': 4, 'eee': 'Znowu litery :)'}]
    Routine blabla
  LoopTerminator t4b
  LoopInitiator TNLB loopType="TrialHandler"
    Selected rows = 3
    conditionsFile = TestNaX/TestNaLiteryB.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'uuu': 0, 'Centrum': 'Z', 'Bok': 'A', 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 4},
      {'uuu': 1, 'Centrum': 'Z', 'Bok': 'B', 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 4},
      {'uuu': 2, 'Centrum': 'Z', 'Bok': 'C', 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 4},
      {'uuu': 3, 'Centrum': 'Z', 'Bok': 'D', 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 4},
      {'uuu': 4, 'Centrum': 'Z', 'Bok': 'E', 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 4},
      {'uuu': 5, 'Centrum': 'Z', 'Bok': 'F', 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 4},
      {'uuu': 6, 'Centrum': 'Z', 'Bok': 'G', 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 4},
      {'uuu': 7, 'Centrum': 'Z', 'Bok': 'H', 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 4},
      {'uuu': 8, 'Centrum': 'Z', 'Bok': 'I', 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 4},
      {'uuu': 9, 'Centrum': 'Z', 'Bok': 'J', 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 4},
      {'uuu': 10, 'Centrum': 'Z', 'Bok': 'K', 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 4},
      {'uuu': 11, 'Centrum': 'Z', 'Bok': 'L', 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 4},
      {'uuu': 12, 'Centrum': 'Z', 'Bok': 'M', 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 4},
      {'uuu': 13, 'Centrum': 'Z', 'Bok': 'N', 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 4},
      {'uuu': 14, 'Centrum': 'Z', 'Bok': 'O', 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 4},
      {'uuu': 15, 'Centrum': 'Z', 'Bok': 'P', 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 4},
      {'uuu': 16, 'Centrum': 'Z', 'Bok': 'R', 'xtrona': -0.4, 'poprawna': "down'", 'grupa': 4}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
    Routine licztera
  LoopTerminator TNLB
  Routine koniec
